CellProfiler Pipeline: http://www.cellprofiler.org
Version:4
DateRevision:318
GitHash:
ModuleCount:23
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Custom
    Select the rule criteria:and (file doesnot contain ".scanprotocol") (file doesnot contain "DS_Store") (file doesnot contain "Thumbs")

Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<SubstrateName>.*)_(?P<Nothing>.*)_A(?P<Site>[0-9]{1,2})f(?P<ImageNumber>[0-9]{1,2})
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Match metadata:[{u'OrigFAK': u'SubstrateName', u'OrigpFAK': u'SubstrateName', u'OrigDNA': u'SubstrateName', u'OrigActin': u'SubstrateName'}, {u'OrigFAK': u'ImageNumber', u'OrigpFAK': u'ImageNumber', u'OrigDNA': u'ImageNumber', u'OrigActin': u'ImageNumber'}]
    Image set matching method:Metadata
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    Assignments count:4
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "d0")
    Name to assign these images:OrigDNA
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    Select the image type:Grayscale image
    Set intensity range from:Image bit-depth
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    Select the rule criteria:and (file does contain "d1")
    Name to assign these images:OrigFAK
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    Select the image type:Grayscale image
    Set intensity range from:Image bit-depth
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    Select the rule criteria:and (file does contain "d2")
    Name to assign these images:OrigActin
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    Select the image type:Grayscale image
    Set intensity range from:Image bit-depth
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    Select the rule criteria:and (file does contain "d3")
    Name to assign these images:OrigpFAK
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    Select the image type:Grayscale image
    Set intensity range from:Image bit-depth
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
Align:[module_num:5|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
    Select the alignment method:Normalized Cross Correlation
    Crop mode:Keep size
    Select the first input image:OrigActin
    Name the first output image:AlignedActin
    Select the second input image:OrigpFAK
    Name the second output image:AlignedpFAK
    Select the additional image:OrigDNA
    Name the output image:AlignedDNA
    Select how the alignment is to be applied:Similarly
    Select the additional image:OrigFAK
    Name the output image:AlignedFAK
    Select how the alignment is to be applied:Separately

CorrectIlluminationCalculate:[module_num:6|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
    Select the input image:AlignedActin
    Name the output image:IllumActin
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:No
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    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:All: Across cycles
    Smoothing method:Fit Polynomial
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    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationApply:[module_num:7|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
    Select the input image:AlignedActin
    Name the output image:CorrActin
    Select the illumination function:IllumActin
    Select how the illumination function is applied:Divide

CorrectIlluminationCalculate:[module_num:8|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
    Select the input image:AlignedDNA
    Name the output image:IllumDNA
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:No
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    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:All: Across cycles
    Smoothing method:Fit Polynomial
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    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationApply:[module_num:9|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
    Select the input image:AlignedDNA
    Name the output image:CorrDNA
    Select the illumination function:IllumActin
    Select how the illumination function is applied:Divide

CorrectIlluminationCalculate:[module_num:10|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
    Select the input image:AlignedFAK
    Name the output image:IllumFAK
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:No
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    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:All: Across cycles
    Smoothing method:Fit Polynomial
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    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationApply:[module_num:11|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
    Select the input image:AlignedFAK
    Name the output image:CorrFAK
    Select the illumination function:IllumActin
    Select how the illumination function is applied:Divide

CorrectIlluminationCalculate:[module_num:12|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
    Select the input image:AlignedpFAK
    Name the output image:IllumpFAK
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:No
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    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:All: Across cycles
    Smoothing method:Fit Polynomial
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    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationApply:[module_num:13|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
    Select the input image:AlignedpFAK
    Name the output image:CorrpFAK
    Select the illumination function:IllumActin
    Select how the illumination function is applied:Divide

IdentifyPrimaryObjects:[module_num:14|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
    Select the input image:CorrDNA
    Name the primary objects to be identified:UnfilteredNuclei
    Typical diameter of objects, in pixel units (Min,Max):50,200
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:After both thresholding and declumping
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    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Adaptive
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    Threshold smoothing scale:5.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Three classes
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
    Size of adaptive window:50
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    Thresholding method:Otsu

Smooth:[module_num:15|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
    Select the input image:OrigActin
    Name the output image:SmoothActin
    Select smoothing method:Smooth Keeping Edges
    Calculate artifact diameter automatically?:No
    Typical artifact diameter:2
    Edge intensity difference:1
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
Smooth:[module_num:16|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
    Select the input image:SmoothActin
    Name the output image:SmoothActin2
    Select smoothing method:Median Filter
    Calculate artifact diameter automatically?:No
    Typical artifact diameter:2.0
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
IdentifySecondaryObjects:[module_num:17|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
    Select the input objects:UnfilteredNuclei
    Name the objects to be identified:Cytoskeleton
    Select the method to identify the secondary objects:Propagation
    Select the input image:SmoothActin2
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    Regularization factor:0
    Discard secondary objects touching the border of the image?:Yes
    Discard the associated primary objects?:Yes
    Name the new primary objects:Nuclei
    Fill holes in identified objects?:Yes
    Threshold setting version:10
    Threshold strategy:Adaptive
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    Threshold smoothing scale:5
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1
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    Two-class or three-class thresholding?:Two classes
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    Size of adaptive window:150
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    Thresholding method:Otsu

IdentifyTertiaryObjects:[module_num:18|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
    Select the larger identified objects:Cytoskeleton
    Select the smaller identified objects:Nuclei
    Name the tertiary objects to be identified:Cytoplasm
    Shrink smaller object prior to subtraction?:No

GrayToColor:[module_num:19|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enabled:False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
    Select a color scheme:RGB
    Select the image to be colored red:AlignedActin
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    Select the image to be colored blue:AlignedDNA
    Name the output image:ColorImage
    Relative weight for the red image:10.0
    Relative weight for the green image:1.0
    Relative weight for the blue image:10.0
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
InvertForPrinting:[module_num:20|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enabled:False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
    Input image type:Color
    Use a red image?:Yes
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    Use a green image?:Yes
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    Use a blue image?:Yes
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    Select the color image:ColorImage
    Output image type:Color
    Select "*Yes*" to produce a red image.:Yes
    Name the red image:InvertedRed
    Select "*Yes*" to produce a green image.:Yes
    Name the green image:InvertedGreen
    Select "*Yes*" to produce a blue image.:Yes
    Name the blue image:InvertedBlue
    Name the inverted color image:InvertedColor

RescaleIntensity:[module_num:21|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
    Select the input image:SmoothActin
    Name the output image:RescaleIntensity
    Rescaling method:Divide by the image's maximum
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
OverlayOutlines:[module_num:22|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:RescaleIntensity
    Name the output image:Overlay
    Outline display mode:Color
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    How to outline:Thick
    Select outline color:#FFFF80
    Select objects to display:Cytoplasm

SaveImages:[module_num:23|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
    Select the type of image to save:Image
    Select the image to save:Overlay
    Select method for constructing file names:From image filename
    Select image name for file prefix:OrigpFAK
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_FAOutline
    Saved file format:tiff
    Output file location:Default Output Folder|Z:\\Bjorn\\CellProfiler Pipelines for Lisa\\CP_Evaluation\\Participant1\\pipeline2
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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