CellProfiler Pipeline: http://www.cellprofiler.org
Version:4
DateRevision:318
GitHash:
ModuleCount:101
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Custom
    Select the rule criteria:and (file doesnot contain ".scanprotocol") (file doesnot contain "DS_Store") (file doesnot contain "Thumbs")

Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<SubstrateName>.*)_P(?P<Nothing>.*)_A(?P<Site>[0-9]{1,2})f(?P<ImageNumber>[0-9]{1,2})
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Match metadata:[{u'OrigFAK': u'SubstrateName', u'OrigpFAK': u'SubstrateName', u'OrigDNA': u'SubstrateName', u'OrigActin': u'SubstrateName'}, {u'OrigFAK': u'ImageNumber', u'OrigpFAK': u'ImageNumber', u'OrigDNA': u'ImageNumber', u'OrigActin': u'ImageNumber'}]
    Image set matching method:Metadata
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    Assignments count:4
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "d0")
    Name to assign these images:OrigDNA
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    Select the image type:Grayscale image
    Set intensity range from:Image bit-depth
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    Select the rule criteria:and (file does contain "d1")
    Name to assign these images:OrigFAK
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    Select the image type:Grayscale image
    Set intensity range from:Image bit-depth
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    Select the rule criteria:and (file does contain "d2")
    Name to assign these images:OrigActin
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    Select the image type:Grayscale image
    Set intensity range from:Image bit-depth
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    Select the rule criteria:and (file does contain "d3")
    Name to assign these images:OrigpFAK
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    Select the image type:Grayscale image
    Set intensity range from:Image bit-depth
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
Align:[module_num:5|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
    Select the alignment method:Normalized Cross Correlation
    Crop mode:Keep size
    Select the first input image:OrigActin
    Name the first output image:AlignedActin
    Select the second input image:OrigpFAK
    Name the second output image:AlignedpFAK
    Select the additional image:OrigDNA
    Name the output image:AlignedDNA
    Select how the alignment is to be applied:Similarly
    Select the additional image:OrigFAK
    Name the output image:AlignedFAK
    Select how the alignment is to be applied:Separately

CorrectIlluminationCalculate:[module_num:6|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
    Select the input image:AlignedActin
    Name the output image:IllumActin
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:No
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    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:All: Across cycles
    Smoothing method:Fit Polynomial
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    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationApply:[module_num:7|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
    Select the input image:AlignedActin
    Name the output image:CorrActin
    Select the illumination function:IllumActin
    Select how the illumination function is applied:Divide

CorrectIlluminationCalculate:[module_num:8|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
    Select the input image:AlignedDNA
    Name the output image:IllumDNA
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:No
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    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:All: Across cycles
    Smoothing method:Fit Polynomial
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    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationApply:[module_num:9|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
    Select the input image:AlignedDNA
    Name the output image:CorrDNA
    Select the illumination function:IllumActin
    Select how the illumination function is applied:Divide

CorrectIlluminationCalculate:[module_num:10|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
    Select the input image:AlignedFAK
    Name the output image:IllumFAK
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:No
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    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:All: Across cycles
    Smoothing method:Fit Polynomial
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    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationApply:[module_num:11|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
    Select the input image:AlignedFAK
    Name the output image:CorrFAK
    Select the illumination function:IllumActin
    Select how the illumination function is applied:Divide

CorrectIlluminationCalculate:[module_num:12|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
    Select the input image:AlignedpFAK
    Name the output image:IllumpFAK
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:No
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    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:All: Across cycles
    Smoothing method:Fit Polynomial
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    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationApply:[module_num:13|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
    Select the input image:AlignedpFAK
    Name the output image:CorrpFAK
    Select the illumination function:IllumActin
    Select how the illumination function is applied:Divide

IdentifyPrimaryObjects:[module_num:14|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
    Select the input image:CorrDNA
    Name the primary objects to be identified:UnfilteredNuclei
    Typical diameter of objects, in pixel units (Min,Max):50,200
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Adaptive
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    Threshold smoothing scale:10.0
    Threshold correction factor:1.15
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Three classes
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
    Size of adaptive window:300
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    Thresholding method:Otsu

Smooth:[module_num:15|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
    Select the input image:CorrActin
    Name the output image:SmoothActin
    Select smoothing method:Smooth Keeping Edges
    Calculate artifact diameter automatically?:No
    Typical artifact diameter:10
    Edge intensity difference:1
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
Smooth:[module_num:16|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
    Select the input image:SmoothActin
    Name the output image:SmoothActin2
    Select smoothing method:Gaussian Filter
    Calculate artifact diameter automatically?:No
    Typical artifact diameter:11.0
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
IdentifySecondaryObjects:[module_num:17|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
    Select the input objects:UnfilteredNuclei
    Name the objects to be identified:Cytoskeleton
    Select the method to identify the secondary objects:Propagation
    Select the input image:SmoothActin2
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    Regularization factor:0
    Discard secondary objects touching the border of the image?:Yes
    Discard the associated primary objects?:Yes
    Name the new primary objects:Nuclei
    Fill holes in identified objects?:Yes
    Threshold setting version:10
    Threshold strategy:Adaptive
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    Threshold smoothing scale:10
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1
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    Two-class or three-class thresholding?:Three classes
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
    Size of adaptive window:100
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    Thresholding method:Otsu

IdentifyTertiaryObjects:[module_num:18|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
    Select the larger identified objects:Cytoskeleton
    Select the smaller identified objects:Nuclei
    Name the tertiary objects to be identified:Cytoplasm
    Shrink smaller object prior to subtraction?:No

Smooth:[module_num:19|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
    Select the input image:AlignedpFAK
    Name the output image:SmoothpFAK
    Select smoothing method:Median Filter
    Calculate artifact diameter automatically?:No
    Typical artifact diameter:2
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
Smooth:[module_num:20|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
    Select the input image:SmoothpFAK
    Name the output image:SmoothpFAK2
    Select smoothing method:Smooth Keeping Edges
    Calculate artifact diameter automatically?:No
    Typical artifact diameter:2
    Edge intensity difference:1
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
RescaleIntensity:[module_num:21|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
    Select the input image:SmoothpFAK
    Name the output image:RescalepFAK
    Rescaling method:Divide by the image's maximum
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
IdentifyPrimaryObjects:[module_num:22|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
    Select the input image:RescalepFAK
    Name the primary objects to be identified:Adhesions
    Typical diameter of objects, in pixel units (Min,Max):10,100
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
    Size of smoothing filter:19
    Suppress local maxima that are closer than this minimum allowed distance:19.0
    Speed up by using lower-resolution image to find local maxima?:No
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:No
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Adaptive
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    Threshold smoothing scale:2
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Three classes
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
    Size of adaptive window:100
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    Thresholding method:Otsu

MeasureObjectSizeShape:[module_num:23|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
    Select objects to measure:Adhesions
    Calculate the Zernike features?:No

RelateObjects:[module_num:24|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
    Parent objects:Cytoplasm
    Child objects:Adhesions
    Name the output object:RelateObjects
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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
FilterObjects:[module_num:25|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
    Select the objects to filter:Adhesions
    Name the output objects:CytoplasmAdhesions
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Select the measurement to filter by:Parent_Cytoplasm
    Filter using a minimum measurement value?:Yes
    Minimum value:1.0
    Filter using a maximum measurement value?:No
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
MeasureObjectSizeShape:[module_num:26|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
    Select objects to measure:CytoplasmAdhesions
    Calculate the Zernike features?:No

ManualEvaluation:[module_num:27|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notes:['Module for manual evaluation of the quality of the identified objects (eg cytoplasm, adhesions). Needs to be placed after IdentifyObjects modules. Choose the main object to rate the quality for first. You can choose further supporting objects to display. Their quality will not be rated.']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
    Set min quality threshold (1-10):9
    Select image on which to display outlines:SmoothpFAK
    Name the output image:EvaluationOverlay
    How to outline:Inner
    Select outline color:#86FE28
    Select objects to display:CytoplasmAdhesions
    Select outline color:#FC7512
    Select objects to display:Cytoplasm

AutomatedEvaluation:[module_num:28|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notes:['Module used to automatically evaluate the quality of identified objects (eg nuclei, adhesions). Needs to be placed after IdentifyObjects and Measurement modules. Choose the object which measurements shall be evaluated first. You may choose more objects as well that will be outlined and displayed. Then choose the measurements to be evaluated and set a tolerance range for their values. If objects are outside this range, a deviation will be measured and saved with the object.']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
    Select image on which to display outlines:SmoothpFAK2
    Name the output image:AutoEvaluationOverlay
    How to outline:Inner
    No. of objects to display:2
    No. of measurements to consider for object:1
    Select outline color:blue
    Select objects to display:CytoplasmAdhesions
    Select outline color:red
    Select objects to display:Cytoplasm
    Select the quality measurement:AreaShape_Eccentricity
    Set tolerance range:0.7,1.0

BayesianOptimisation:[module_num:29|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notes:['This module uses BayesianOptimisation on parameters (settings) chosen from modules placed before this module in the pipeline. Step 1: Choose the object which you have evaluated in the evaluation modules. The Bayesian module considers these measures as quality indicators. Step 2: Choose the parameters (settings) to be adjusted. Bayesian Optimisation will be executed if required quality thresholds/ranges are not met.']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
    Input object name:CytoplasmAdhesions
    No. of evaluation modules:2
    No. of settings to be adjusted:4
    Weighting of manual evaluation score (%):50
    Weighting of automated evaluation score (%):50
    Select measurements for evaluation:Evaluation_Deviation
    Select measurements for evaluation:Evaluation_ManualQuality
    Max. iterations for Bayesian Optimisation:150
    Length scale for Bayesian Optimisation kernel function:0.5
    Alpha for Bayesian Optimisation model:5
    Select module:IdentifySecondaryObjects #17
    Select parameter:Size of adaptive window
    Set min and max boundaries for variation:50,350.0
    Set steps between boundaries:50
    Select module:IdentifyPrimaryObjects #22
    Select parameter:Threshold correction factor
    Set min and max boundaries for variation:0.8,1.5
    Set steps between boundaries:0.05
    Select module:IdentifyPrimaryObjects #22
    Select parameter:Size of smoothing filter
    Set min and max boundaries for variation:0,20.0
    Set steps between boundaries:1
    Select module:IdentifyPrimaryObjects #22
    Select parameter:Suppress local maxima that are closer than this minimum allowed distance
    Set min and max boundaries for variation:0,20.0
    Set steps between boundaries:1
    Output file location:Default Input Folder sub-folder|Desktop

GrayToColor:[module_num:30|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enabled:False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
    Select a color scheme:RGB
    Select the image to be colored red:AlignedActin
    Select the image to be colored green:SmoothpFAK
    Select the image to be colored blue:AlignedDNA
    Name the output image:ColorImage
    Relative weight for the red image:5.0
    Relative weight for the green image:10
    Relative weight for the blue image:5
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
InvertForPrinting:[module_num:31|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enabled:False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
    Input image type:Color
    Use a red image?:Yes
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    Use a green image?:Yes
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    Use a blue image?:Yes
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    Select the color image:ColorImage
    Output image type:Color
    Select "*Yes*" to produce a red image.:Yes
    Name the red image:InvertedRed
    Select "*Yes*" to produce a green image.:Yes
    Name the green image:InvertedGreen
    Select "*Yes*" to produce a blue image.:Yes
    Name the blue image:InvertedBlue
    Name the inverted color image:InvertedColor

OverlayOutlines:[module_num:32|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:RescalepFAK
    Name the output image:Overlay
    Outline display mode:Color
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    How to outline:Thick
    Select outline color:#FFFF80
    Select objects to display:CytoplasmAdhesions
    Select outline color:#0080C0
    Select objects to display:Cytoplasm

SaveImages:[module_num:33|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
    Select the type of image to save:Image
    Select the image to save:Overlay
    Select method for constructing file names:From image filename
    Select image name for file prefix:OrigpFAK
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_Outline
    Saved file format:tiff
    Output file location:Default Output Folder|Z:\\Bjorn\\CellProfiler Pipelines for Lisa\\CP_Evaluation\\Participant1\\pipeline2
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
CalculateMath:[module_num:34|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
    Name the output measurement:Measurement
    Operation:Multiply
    Select the first operand measurement type:Image
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    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the second operand measurement type:Image
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    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:1.0
    Raise the power of result by:1.0
    Add to the result:0.0
    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
CalculateMath:[module_num:35|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
    Name the output measurement:Measurement
    Operation:Multiply
    Select the first operand measurement type:Image
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    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the second operand measurement type:Image
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    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:1.0
    Raise the power of result by:1.0
    Add to the result:0.0
    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
CalculateMath:[module_num:36|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
    Name the output measurement:Measurement
    Operation:Multiply
    Select the first operand measurement type:Image
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    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the second operand measurement type:Image
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    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:1.0
    Raise the power of result by:1.0
    Add to the result:0.0
    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
CalculateMath:[module_num:37|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
    Name the output measurement:Measurement
    Operation:Multiply
    Select the first operand measurement type:Image
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    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the second operand measurement type:Image
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    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:1.0
    Raise the power of result by:1.0
    Add to the result:0.0
    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
CalculateMath:[module_num:38|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
    Name the output measurement:Measurement
    Operation:Multiply
    Select the first operand measurement type:Image
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    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the second operand measurement type:Image
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    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:1.0
    Raise the power of result by:1.0
    Add to the result:0.0
    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
CalculateMath:[module_num:39|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
    Name the output measurement:Measurement
    Operation:Multiply
    Select the first operand measurement type:Image
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    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the second operand measurement type:Image
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    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:1.0
    Raise the power of result by:1.0
    Add to the result:0.0
    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
CalculateMath:[module_num:40|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
    Name the output measurement:Measurement
    Operation:Multiply
    Select the first operand measurement type:Image
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    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the second operand measurement type:Image
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    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:1.0
    Raise the power of result by:1.0
    Add to the result:0.0
    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
CalculateMath:[module_num:41|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
    Name the output measurement:Measurement
    Operation:Multiply
    Select the first operand measurement type:Image
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    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the second operand measurement type:Image
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    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:1.0
    Raise the power of result by:1.0
    Add to the result:0.0
    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
CalculateMath:[module_num:42|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
    Name the output measurement:Measurement
    Operation:Multiply
    Select the first operand measurement type:Image
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    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the second operand measurement type:Image
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    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:1.0
    Raise the power of result by:1.0
    Add to the result:0.0
    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
CalculateMath:[module_num:43|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
    Name the output measurement:Measurement
    Operation:Multiply
    Select the first operand measurement type:Image
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    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the second operand measurement type:Image
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    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:1.0
    Raise the power of result by:1.0
    Add to the result:0.0
    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
CalculateMath:[module_num:44|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
    Name the output measurement:Measurement
    Operation:Multiply
    Select the first operand measurement type:Image
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    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the second operand measurement type:Image
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    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:1.0
    Raise the power of result by:1.0
    Add to the result:0.0
    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
CalculateMath:[module_num:45|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
    Name the output measurement:Measurement
    Operation:Multiply
    Select the first operand measurement type:Image
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    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the second operand measurement type:Image
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    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:1.0
    Raise the power of result by:1.0
    Add to the result:0.0
    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
CalculateMath:[module_num:46|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
    Name the output measurement:Measurement
    Operation:Multiply
    Select the first operand measurement type:Image
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    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the second operand measurement type:Image
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    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:1.0
    Raise the power of result by:1.0
    Add to the result:0.0
    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
CalculateMath:[module_num:47|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
    Name the output measurement:Measurement
    Operation:Multiply
    Select the first operand measurement type:Image
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    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the second operand measurement type:Image
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    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:1.0
    Raise the power of result by:1.0
    Add to the result:0.0
    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
CalculateMath:[module_num:48|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
    Name the output measurement:Measurement
    Operation:Multiply
    Select the first operand measurement type:Image
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    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the second operand measurement type:Image
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    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:1.0
    Raise the power of result by:1.0
    Add to the result:0.0
    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
CalculateStatistics:[module_num:49|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
    Log-transform the dose values?:No
    Create dose-response plots?:No
    Figure prefix:
    Output file location:Default Output Folder|

CalculateMath:[module_num:50|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
    Name the output measurement:Measurement
    Operation:Multiply
    Select the first operand measurement type:Image
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    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the second operand measurement type:Image
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    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:1.0
    Raise the power of result by:1.0
    Add to the result:0.0
    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
CalculateMath:[module_num:51|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
    Name the output measurement:Measurement
    Operation:Multiply
    Select the first operand measurement type:Image
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    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the second operand measurement type:Image
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    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:1.0
    Raise the power of result by:1.0
    Add to the result:0.0
    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
CalculateMath:[module_num:52|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
    Name the output measurement:Measurement
    Operation:Multiply
    Select the first operand measurement type:Image
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    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the second operand measurement type:Image
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    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:1.0
    Raise the power of result by:1.0
    Add to the result:0.0
    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
CalculateMath:[module_num:53|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
    Name the output measurement:Measurement
    Operation:Multiply
    Select the first operand measurement type:Image
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    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the second operand measurement type:Image
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    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:1.0
    Raise the power of result by:1.0
    Add to the result:0.0
    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
CalculateMath:[module_num:54|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
    Name the output measurement:Measurement
    Operation:Multiply
    Select the first operand measurement type:Image
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    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the second operand measurement type:Image
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    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:1.0
    Raise the power of result by:1.0
    Add to the result:0.0
    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
CalculateMath:[module_num:55|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
    Name the output measurement:Measurement
    Operation:Multiply
    Select the first operand measurement type:Image
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    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the second operand measurement type:Image
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    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:1.0
    Raise the power of result by:1.0
    Add to the result:0.0
    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
CalculateMath:[module_num:56|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
    Name the output measurement:Measurement
    Operation:Multiply
    Select the first operand measurement type:Image
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    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the second operand measurement type:Image
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    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:1.0
    Raise the power of result by:1.0
    Add to the result:0.0
    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
CalculateMath:[module_num:57|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
    Name the output measurement:Measurement
    Operation:Multiply
    Select the first operand measurement type:Image
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    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the second operand measurement type:Image
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    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:1.0
    Raise the power of result by:1.0
    Add to the result:0.0
    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
CalculateMath:[module_num:58|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
    Name the output measurement:Measurement
    Operation:Multiply
    Select the first operand measurement type:Image
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    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the second operand measurement type:Image
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    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:1.0
    Raise the power of result by:1.0
    Add to the result:0.0
    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
CalculateMath:[module_num:59|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
    Name the output measurement:Measurement
    Operation:Multiply
    Select the first operand measurement type:Image
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    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the second operand measurement type:Image
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    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:1.0
    Raise the power of result by:1.0
    Add to the result:0.0
    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
CalculateMath:[module_num:60|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
    Name the output measurement:Measurement
    Operation:Multiply
    Select the first operand measurement type:Image
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    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the second operand measurement type:Image
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    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:1.0
    Raise the power of result by:1.0
    Add to the result:0.0
    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
CalculateMath:[module_num:61|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
    Name the output measurement:Measurement
    Operation:Multiply
    Select the first operand measurement type:Image
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    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the second operand measurement type:Image
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    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:1.0
    Raise the power of result by:1.0
    Add to the result:0.0
    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
CalculateMath:[module_num:62|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
    Name the output measurement:Measurement
    Operation:Multiply
    Select the first operand measurement type:Image
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    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the second operand measurement type:Image
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    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:1.0
    Raise the power of result by:1.0
    Add to the result:0.0
    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
CalculateMath:[module_num:63|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
    Name the output measurement:Measurement
    Operation:Multiply
    Select the first operand measurement type:Image
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    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the second operand measurement type:Image
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    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:1.0
    Raise the power of result by:1.0
    Add to the result:0.0
    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
CalculateMath:[module_num:64|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
    Name the output measurement:Measurement
    Operation:Multiply
    Select the first operand measurement type:Image
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    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the second operand measurement type:Image
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    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:1.0
    Raise the power of result by:1.0
    Add to the result:0.0
    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
CalculateMath:[module_num:65|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
    Name the output measurement:Measurement
    Operation:Multiply
    Select the first operand measurement type:Image
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    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the second operand measurement type:Image
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    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:1.0
    Raise the power of result by:1.0
    Add to the result:0.0
    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
CalculateMath:[module_num:66|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
    Name the output measurement:Measurement
    Operation:Multiply
    Select the first operand measurement type:Image
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    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the second operand measurement type:Image
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    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:1.0
    Raise the power of result by:1.0
    Add to the result:0.0
    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
CalculateMath:[module_num:67|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
    Name the output measurement:Measurement
    Operation:Multiply
    Select the first operand measurement type:Image
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    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the second operand measurement type:Image
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    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:1.0
    Raise the power of result by:1.0
    Add to the result:0.0
    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
CalculateMath:[module_num:68|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
    Name the output measurement:Measurement
    Operation:Multiply
    Select the first operand measurement type:Image
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    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the second operand measurement type:Image
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    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:1.0
    Raise the power of result by:1.0
    Add to the result:0.0
    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
CalculateMath:[module_num:69|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
    Name the output measurement:Measurement
    Operation:Multiply
    Select the first operand measurement type:Image
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    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the second operand measurement type:Image
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    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:1.0
    Raise the power of result by:1.0
    Add to the result:0.0
    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
CalculateMath:[module_num:70|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
    Name the output measurement:Measurement
    Operation:Multiply
    Select the first operand measurement type:Image
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    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the second operand measurement type:Image
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    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:1.0
    Raise the power of result by:1.0
    Add to the result:0.0
    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
CalculateMath:[module_num:71|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
    Name the output measurement:Measurement
    Operation:Multiply
    Select the first operand measurement type:Image
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    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the second operand measurement type:Image
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    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:1.0
    Raise the power of result by:1.0
    Add to the result:0.0
    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
CalculateStatistics:[module_num:72|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
    Log-transform the dose values?:No
    Create dose-response plots?:No
    Figure prefix:
    Output file location:Default Output Folder|

CalculateStatistics:[module_num:73|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
    Log-transform the dose values?:No
    Create dose-response plots?:No
    Figure prefix:
    Output file location:Default Output Folder|

CalculateStatistics:[module_num:74|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
    Log-transform the dose values?:No
    Create dose-response plots?:No
    Figure prefix:
    Output file location:Default Output Folder|

CalculateStatistics:[module_num:75|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
    Log-transform the dose values?:No
    Create dose-response plots?:No
    Figure prefix:
    Output file location:Default Output Folder|

CalculateStatistics:[module_num:76|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
    Log-transform the dose values?:No
    Create dose-response plots?:No
    Figure prefix:
    Output file location:Default Output Folder|

CalculateStatistics:[module_num:77|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
    Log-transform the dose values?:No
    Create dose-response plots?:No
    Figure prefix:
    Output file location:Default Output Folder|

CalculateStatistics:[module_num:78|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
    Log-transform the dose values?:No
    Create dose-response plots?:No
    Figure prefix:
    Output file location:Default Output Folder|

CalculateStatistics:[module_num:79|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
    Log-transform the dose values?:No
    Create dose-response plots?:No
    Figure prefix:
    Output file location:Default Output Folder|

CalculateStatistics:[module_num:80|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
    Log-transform the dose values?:No
    Create dose-response plots?:No
    Figure prefix:
    Output file location:Default Output Folder|

CalculateStatistics:[module_num:81|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
    Log-transform the dose values?:No
    Create dose-response plots?:No
    Figure prefix:
    Output file location:Default Output Folder|

CalculateStatistics:[module_num:82|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
    Log-transform the dose values?:No
    Create dose-response plots?:No
    Figure prefix:
    Output file location:Default Output Folder|

CalculateStatistics:[module_num:83|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
    Log-transform the dose values?:No
    Create dose-response plots?:No
    Figure prefix:
    Output file location:Default Output Folder|

CalculateStatistics:[module_num:84|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
    Log-transform the dose values?:No
    Create dose-response plots?:No
    Figure prefix:
    Output file location:Default Output Folder|

CalculateStatistics:[module_num:85|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
    Log-transform the dose values?:No
    Create dose-response plots?:No
    Figure prefix:
    Output file location:Default Output Folder|

CalculateStatistics:[module_num:86|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
    Log-transform the dose values?:No
    Create dose-response plots?:No
    Figure prefix:
    Output file location:Default Output Folder|

CalculateStatistics:[module_num:87|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
    Log-transform the dose values?:No
    Create dose-response plots?:No
    Figure prefix:
    Output file location:Default Output Folder|

CalculateStatistics:[module_num:88|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
    Log-transform the dose values?:No
    Create dose-response plots?:No
    Figure prefix:
    Output file location:Default Output Folder|

CalculateStatistics:[module_num:89|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
    Log-transform the dose values?:No
    Create dose-response plots?:No
    Figure prefix:
    Output file location:Default Output Folder|

CalculateStatistics:[module_num:90|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
    Log-transform the dose values?:No
    Create dose-response plots?:No
    Figure prefix:
    Output file location:Default Output Folder|

CalculateStatistics:[module_num:91|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
    Log-transform the dose values?:No
    Create dose-response plots?:No
    Figure prefix:
    Output file location:Default Output Folder|

CalculateMath:[module_num:92|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
    Name the output measurement:Measurement
    Operation:Multiply
    Select the first operand measurement type:Image
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    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the second operand measurement type:Image
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    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:1.0
    Raise the power of result by:1.0
    Add to the result:0.0
    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
CalculateMath:[module_num:93|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
    Name the output measurement:Measurement
    Operation:Multiply
    Select the first operand measurement type:Image
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    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the second operand measurement type:Image
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    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:1.0
    Raise the power of result by:1.0
    Add to the result:0.0
    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
CalculateMath:[module_num:94|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
    Name the output measurement:Measurement
    Operation:Multiply
    Select the first operand measurement type:Image
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    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the second operand measurement type:Image
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    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:1.0
    Raise the power of result by:1.0
    Add to the result:0.0
    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
CalculateMath:[module_num:95|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
    Name the output measurement:Measurement
    Operation:Multiply
    Select the first operand measurement type:Image
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    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the second operand measurement type:Image
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    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:1.0
    Raise the power of result by:1.0
    Add to the result:0.0
    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
CalculateMath:[module_num:96|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
    Name the output measurement:Measurement
    Operation:Multiply
    Select the first operand measurement type:Image
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    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the second operand measurement type:Image
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    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:1.0
    Raise the power of result by:1.0
    Add to the result:0.0
    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
CalculateMath:[module_num:97|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
    Name the output measurement:Measurement
    Operation:Multiply
    Select the first operand measurement type:Image
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    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the second operand measurement type:Image
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    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:1.0
    Raise the power of result by:1.0
    Add to the result:0.0
    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
CalculateMath:[module_num:98|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
    Name the output measurement:Measurement
    Operation:Multiply
    Select the first operand measurement type:Image
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    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the second operand measurement type:Image
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    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:1.0
    Raise the power of result by:1.0
    Add to the result:0.0
    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
CalculateMath:[module_num:99|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
    Name the output measurement:Measurement
    Operation:Multiply
    Select the first operand measurement type:Image
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    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the second operand measurement type:Image
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    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:1.0
    Raise the power of result by:1.0
    Add to the result:0.0
    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
ExportToDatabase:[module_num:100|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enabled:False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
    Database type:SQLite
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    Add a prefix to table names?:Yes
    Table prefix:MyExpt_
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    Output file location:Default Output Folder|
    Create a CellProfiler Analyst properties file?:Yes
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    Name the SQLite database file:DefaultDB.db
    Calculate the per-image mean values of object measurements?:No
    Calculate the per-image median values of object measurements?:No
    Calculate the per-image standard deviation values of object measurements?:No
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    Export measurements for all objects to the database?:Select...
    Select the objects:Cytoplasm2,Cytoskeleton,FilteredCytoplasmAdhesions,Nuclei
    Maximum # of characters in a column name:64
    Create one table per object, a single object table or a single object view?:One table per object type
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    Write image thumbnails directly to the database?:No
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    Select the plate type:24
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    Select the well metadata:SubstrateName
    Include information for all images, using default values?:Yes
    Properties image group count:1
    Properties group field count:1
    Properties filter field count:0
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    Experiment name:MyExpt
    Which objects should be used for locations?:Nuclei
    Enter a phenotype class table name if using the Classifier tool in CellProfiler Analyst:
    Export object relationships?:Yes
    Overwrite without warning?:Never
    Access CellProfiler Analyst images via URL?:No
    Select the classification type:Object
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    Do you want to add group fields?:Yes
    Enter the name of the group:Topography
    Enter the per-image columns which define the group, separated by commas:Image_Metadata_SubstrateName
    Do you want to add filter fields?:No
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    Create a CellProfiler Analyst workspace file?:No
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
BayesianOptimisation:[module_num:101|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notes:['This module uses BayesianOptimisation on parameters (settings) chosen from modules placed before this module in the pipeline. Step 1: Choose the object which you have evaluated in the evaluation modules. The Bayesian module considers these measures as quality indicators. Step 2: Choose the parameters (settings) to be adjusted. Bayesian Optimisation will be executed if required quality thresholds/ranges are not met.']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
    Input object name:None
    No. of evaluation modules:1
    No. of settings to be adjusted:2
    Weighting of manual evaluation score (%):50
    Weighting of automated evaluation score (%):50
    Max. iterations for Bayesian Optimisation:Evaluation_Deviation
    Length scale for Bayesian Optimisation kernel function:150
    Alpha for Bayesian Optimisation model:0.1
    Output file location:0.01
